CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:DAPI
    Name the output image:FilteredDAPI
    Window:3

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:FilteredDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
GrayToColor:[module_num:8|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
    Select a color scheme:RGB
    Select the image to be colored red:Actin
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    Select the image to be colored blue:DAPI
    Name the output image:MergedImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MergedImage
    Name the output image:MergedImageWithOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Cells

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:MergedImageWithOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Seg
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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